PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'id*': '', 'participant*': '', 'Interested In(Men/Women)*': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = testScript1
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Routines
  Routine trial
    TextComponent helloScreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Hello
        Welcome
  Routine imageShow
    ImageComponent image
      image [set every repeat] = $Original
      size = (2, 1.33)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent gazeData
      Code Type = Py
      Begin Experiment:
        import time
        import tobii_research as tr
        from msvcrt import getch
        import sys
        from psychopy import data

        # ref code used
        # http://devtobiipro.azurewebsites.net/tobii.research/python/reference/1.8.0.32-alpha-g5b38a1f5/gaze_data_8py-example.html

        # in sec
        timer = 5000
        # reading per sec
        frequency = 2
        global_gaze_data = None
        # in second
        fixation_threshhold = 0.5
        # minimum
        fixation_tolerance = 0.0005

        imageId = 1

        def initTobii():
            current_eye_tracker = tr.find_all_eyetrackers()[0]
            # print(current_eye_tracker)
            return current_eye_tracker


        def getTimeStamp():
            return int((time.time() - start_time) * 1000)

        def gaze_data_callback(gaze_data):
            global global_gaze_data
            global_gaze_data = gaze_data

        start_time = time.time()
        eyetracker = initTobii();
        eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)
        print ("tobii inilialized")
        print(getTimeStamp())

        fileName = "expData/"+expInfo["id"]+"_"+expInfo["participant"]
        #extraInformation = {'name': expInfo["name"], 'id': expInfo["id"]}
        expData = data.ExperimentHandler(name='Eye swiping',
                        version="1.0.0",
                        #extraInfo=extraInformation,
                        extraInfo=None,
                        dataFileName=fileName)
      Begin Routine:
        start_time = time.time()
        allGazeData = []
      Each Frame:
        print(global_gaze_data)
        time.sleep(1/frequency)
        print(getTimeStamp())

        allGazeData.append(global_gaze_data)

        #expData.addData("Gaze Data", global_gaze_data)
      End Experiment:
        eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
      End Routine:
        expData.addData("Gaze Data "+str(imageId), allGazeData)
        imageId=imageId+1
  Routine Baseline
    ImageComponent baselineImage
      image [set every repeat] = $Blur
      size = (2, 1.33)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import time
        import tobii_research as tr
        from msvcrt import getch
        import sys
        from psychopy import data

        # ref code used
        # http://devtobiipro.azurewebsites.net/tobii.research/python/reference/1.8.0.32-alpha-g5b38a1f5/gaze_data_8py-example.html

        # in sec
        timer = 2000
        # reading per sec
        frequency = 2
        global_gaze_data = None
        # in second
        fixation_threshhold = 0.5
        # minimum
        fixation_tolerance = 0.0005

        imageId = 1

        def initTobii():
            current_eye_tracker = tr.find_all_eyetrackers()[0]
            # print(current_eye_tracker)
            return current_eye_tracker


        def getTimeStamp():
            return int((time.time() - start_time) * 1000)

        def gaze_data_callback(gaze_data):
            global global_gaze_data
            global_gaze_data = gaze_data

        start_time = time.time()
        eyetracker = initTobii();
        eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)
        print ("tobii inilialized")
        print(getTimeStamp())

        fileName = "expData/"+expInfo["id"]+"_"+expInfo["participant"]
        #extraInformation = {'name': expInfo["name"], 'id': expInfo["id"]}
        expData = data.ExperimentHandler(name='Eye swiping',
                        version="1.0.0",
                        #extraInfo=extraInformation,
                        extraInfo=None,
                        dataFileName=fileName)
      Begin Routine:
        start_time = time.time()
        allGazeData = []
      Each Frame:
        print(global_gaze_data)
        time.sleep(1/frequency)
        print(getTimeStamp())

        allGazeData.append(global_gaze_data)

        #expData.addData("Gaze Data", global_gaze_data)
      End Routine:
        expData.addData("Gaze Data "+str(imageId)+'blur', allGazeData)
        imageId=imageId+1
  Routine Feedback
    RatingScaleComponent rating
      categoryChoices = Yes, No
      forceEndRoutine = True
      high = 6
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    KeyboardComponent NextImagePress
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent RatingText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = Do you like this image?
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  Routine Instruction
    TextComponent TODO
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome:

        Each picture is preceded by a scramblbed version, focus picture and think about whether you like the person or not, indicate your choice afterwards with a button press.

        Press any key to start the trial.
    KeyboardComponent StartTrialPress
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Thanks
    TextComponent ThanksText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating this experiment.

        Please press any key to finish this trial.
    KeyboardComponent StopTrialPress
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = imgUrl.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Blur', 'image/1-blur.jpg'), ('Original', 'image/1-original.jpg')]),
      OrderedDict([('Blur', 'image/2-blur.jpg'), ('Original', 'image/2-original.jpg')]),
      OrderedDict([('Blur', 'image/3-blur.jpg'), ('Original', 'image/3-original.jpg')]),
      OrderedDict([('Blur', 'image/4-blur.jpg'), ('Original', 'image/4-original.jpg')]),
      OrderedDict([('Blur', 'image/5-blur.jpg'), ('Original', 'image/5-original.jpg')])]
    Routine Baseline
    Routine imageShow
    Routine Feedback
  LoopTerminator trials
  Routine Thanks
